<?xml version="1.0" standalone="no"?>
<monkeyml version="1.0">
    <io_devices tag="IO Devices">
        <iodevice type="stimulus_display" tag="Stimulus Display" background_color="0, 0, 0"></iodevice>
        <iodevice tag="itc" priority="" type="itc18" alt="">
            <iochannel tag="ITC18 analog input" variable="photodiode_signal" capability="ITC18_ADC_INPUT0" data_type="analog" type="itc18_analog_input" direction="input" synchrony="hardware_timed_synchronous" range_min="-10" range_max="10" resolution="16" update_interval="3ms" data_interval="1ms"></iochannel>
            <iochannel tag="ITC18 TTL input" type="itc18_ttl_digital_input" variable="vsync_signal" capability="ITC18_TTL_INPUT1" data_type="edge_any" direction="input" synchrony="hardware_timed_synchronous" range_min="0" range_max="0" resolution="1" update_interval="3ms" data_interval="0.5ms"></iochannel>
        </iodevice>
    </io_devices>
    <variables tag="Variables">
        <variable tag="photodiode_signal" scope="global" logging="when_changed" default_value="0" type="float"></variable>
        <variable tag="vsync_signal" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="start" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="stop" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
    </variables>
    <sounds tag="Sounds"></sounds>
    <stimuli tag="Stimuli">
        <stimulus type="frame_list" tag="frame_list" stimulus_group="frames" ended="" loop="1" autoplay="0"></stimulus>
        <stimulus_group tag="frames">
            <stimulus type="blank_screen" tag="white_screen" color="1,1,1"></stimulus>
            <stimulus type="blank_screen" tag="black_screen" color="0,0,0"></stimulus>
        </stimulus_group>
    </stimuli>
    <filters tag="Filters"></filters>
    <optimizers tag="Optimizers"></optimizers>
    <experiment tag="New Experiment" full_name="" description="">
        <protocol tag="New Protocol" nsamples="1" sampling_method="cycles" selection="sequential" interruptible="YES">
            <action tag="Queue Stimulus" type="queue_stimulus" stimulus="frame_list"></action>
            <action tag="Update Stimulus Display" type="update_stimulus_display"></action>
            <action tag="Start IO Device" type="start_device_IO" device="itc"></action>
            <action type="wait" tag="Wait 3" duration="1.0" duration_units="s"></action>
            <action type="assignment" tag="Start collecting events" variable="start" value="!start"></action>
            <action type="wait" tag="Wait 2" duration="50" duration_units="ms"></action>
            <action tag="Play dynamic stimulus" type="play_dynamic_stimulus" stimulus="frame_list"></action>
            <action type="wait" tag="Wait" duration="300" duration_units="ms"></action>
            <action tag="Stop dynamic stimulus" type="stop_dynamic_stimulus" stimulus="frame_list"></action>
            <action tag="Update Stimulus Display 2" type="update_stimulus_display"></action>
            <action type="wait" tag="Wait 4" duration="100" duration_units="ms"></action>
            <action type="assignment" tag="Stop collecting events" variable="stop" value="!stop"></action>
            <action tag="Stop IO Device" type="stop_device_IO" device="itc"></action>
        </protocol>
    </experiment>
</monkeyml>